PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nh_sess1
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent imageLandmarks
      image [set every repeat] = $landmark_images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welcome to the Nursing Home Experiment
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  Routine End
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating in the Nursing Home Experiment
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  Routine Instruction1
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now look at the following objects and rate the object based on its salience. 1 being the least salience and 5 being the most salience.

        Salience is when something is being particularly noticeable and important, how prominent it is.

        Press SPACEBAR to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction2
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Lastly, you will name the object that you see to the best if your ability.

        Please type N/A for objects you do not know and TOT if you are familiar with the object but the name is on the tip of your tongue.

        Please press SPACEBAR to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_salience
    TextComponent salience_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = On a scale of 1 to 5, how salience would you rate the object?
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    KeyboardComponent salience_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent image_LandmarkA
      image [set every repeat] = $landmark_imagesA
      pos = (-.25,.2 )
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_LandmarkB
      image [set every repeat] = $landmark_imagesB
      pos = (0, .2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_LandmarkC
      image [set every repeat] = $landmark_imagesC
      pos = (.25, .2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine feedback_visualcomplexity
    TextComponent visualcomplexity_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = On a scale of 1 to 5, how visually complex was the object?
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    KeyboardComponent visualcomplexity_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine name_generation
    TextComponent landmarkName_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        What would you name this object?
    TextboxComponent feedbackText
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent endButton
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = continue
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    MouseComponent mouse
      clickable = endButton
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  Routine Instruction1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = landmark_stims.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'landmark_imagesA': 'images/Landmark1.png', 'landmark_imagesB': 'images/Landmark5.png', 'landmark_imagesC': 'images/Landmark9.png'},
      {'landmark_imagesA': 'images/Landmark2.png', 'landmark_imagesB': 'images/Landmark6.png', 'landmark_imagesC': 'images/Landmark10.png'},
      {'landmark_imagesA': 'images/Landmark3.png', 'landmark_imagesB': 'images/Landmark7.png', 'landmark_imagesC': 'images/Landmark11.png'},
      {'landmark_imagesA': 'images/Landmark4.png', 'landmark_imagesB': 'images/Landmark8.png', 'landmark_imagesC': 'images/Landmark12.png'}]
    Routine feedback_salience
  LoopTerminator trials
  Routine End
